PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['id_number'], expName, expInfo['date'])
  Experiment info = {'id_number': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [2560, 1440]
  color = $[-1, -1, -1]
  expName = study 1
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine introduction
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    TextComponent instructions
      font = Avenir Next
      letterHeight = 20
      startVal [frame N] = 0.0
      text [set every repeat] = $intro
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    KeyboardComponent end_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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  Routine task_instructions
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    TextComponent instr
      font = Avenir Next
      letterHeight = 20
      startVal [frame N] = 0.0
      text [set every repeat] = $overall_instr
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    KeyboardComponent begin_task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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  Routine img_generation
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    ImageComponent inverse
      image [set every repeat] = $inverse_image
      pos [set every repeat] = $(inv_loc_X, inv_loc_Y)
      size = (400, 400)
      startVal [frame N] = 0.0
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    ImageComponent original
      image [set every repeat] = $original_image
      pos [set every repeat] = $(ori_loc_X, ori_loc_Y)
      size = (400, 400)
      startVal [frame N] = 0.0
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    TextComponent choice_text
      font = Avenir Next
      letterHeight = 20
      pos = (0, 250)
      startVal [frame N] = 0.0
      text [set every repeat] = $category_instr
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    KeyboardComponent image_choice
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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    TextComponent left_sign
      font = Avenir Next
      letterHeight = 20
      pos = (-300, -350)
      startVal [frame N] = 0.0
      text = LEFT
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    TextComponent right_sign
      font = Avenir Next
      letterHeight = 20
      pos = (300, -350)
      startVal [frame N] = 0.0
      text = RIGHT
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  Routine demo_intro
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    TextComponent demographics_intro
      font = Avenir Next
      letterHeight = 20
      startVal [frame N] = 0.0
      stopVal [frame N] = 300
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      text:
        Thank you for your responses!

        We will now collect some demographic information about you before the end of the study.
  Routine age
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    TextComponent age_question
      font = Avenir Next
      letterHeight = 20
      startVal [frame N] = 0.0
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      text:
        What is your age:

        (press the corresponding letter key to enter a value)

        (a) 18-27
        (b) 28-37
        (c) 38-47
        (d) 48-57
        (e) 58-67
        (f) 68+
    KeyboardComponent age_response
      allowedKeys = 'a', 'b', 'c', 'd', 'e', 'f'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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  Routine sex
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    TextComponent sex_question
      font = Avenir Next
      letterHeight = 20
      startVal [frame N] = 0.0
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      text:
        What is your sex?

        Press 'm' for male
        Press 'f' for female
        Press 'b' for non-binary
        Press 'o' for other
    KeyboardComponent sex_response
      allowedKeys = 'm', 'f', 'b', 'o'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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  Routine race
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    TextComponent race_question
      font = Avenir Next
      letterHeight = 20
      startVal [frame N] = 0.0
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      text:
        What is your race?

        Press 'b' for Black/African American
        Press 'w' for White
        Press 'l' for Latino/a
        Press 'n' for Native American
        Press 'a' for Asian/Pacific Islander
        Press 'e' for Middle Eastern
        Press 'm' for Multi/Biracial
    KeyboardComponent race_response
      allowedKeys = 'b', 'w', 'l', 'n', 'a', 'e', 'm'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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  Routine thanks
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    TextComponent thanks_text
      font = Avenir Next
      letterHeight = 20
      startVal [frame N] = 0.0
      stopVal [frame N] = 600
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      text:
        Thanks for participating in our experiment!

        This was a study designed to determine your mental representation of how the 'typical' police officer views Black men. The images you saw were in fact the same base image every time, but with different noise patterns overlaid to obscure small parts of the face and enhance others.

        These images will be averaged together to come up with a "classification" image that shows the average representation people have of how police mentally represent Black men, or at least how people perceive them to.

        Should you have any further questions, please contact the experimenters listed on the hosting platform or on the consent form.
  Routine born_us
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    TextComponent born_question
      font = Avenir Next
      letterHeight = 20
      startVal [frame N] = 0.0
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      text:
        Were you born in the U.S.?

        Press 'y' for yes
        Press 'n' for no
    KeyboardComponent born_response
      allowedKeys = 'y', 'n'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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  Routine english_fluent
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    TextComponent english_question
      font = Avenir Next
      letterHeight = 20
      startVal [frame N] = 0.0
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      text:
        Are you fluent in English?

        Press 'y' for yes
        Press 'n' for no
    KeyboardComponent english_response
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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  Routine politics
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    TextComponent politics_question
      font = Avenir Next
      letterHeight = 20
      startVal [frame N] = 0.0
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      text:
        What is your political affiliation?

        Press 'd' for Democrat
        Press 'i' for Independent
        Press 'r' for Republican
    KeyboardComponent politics_response
      allowedKeys = 'd', 'i', 'r'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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  Routine politics_scale
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    TextComponent political_scale_question
      font = Avenir Next
      letterHeight = 20
      pos = (0, 100)
      startVal [frame N] = 0.0
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      text:
        Please indicate the degree to which you identify as a conservative or a liberal:

        (press the corresponding numeric key)
    KeyboardComponent political_scale_response
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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    TextComponent one
      font = Avenir Next
      letterHeight = 20
      pos = (-300, -100)
      startVal [frame N] = 0.0
      text = 1
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    TextComponent two
      font = Avenir Next
      letterHeight = 20
      pos = (-200, -100)
      startVal [frame N] = 0.0
      text = 2
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    TextComponent three
      font = Avenir Next
      letterHeight = 20
      pos = (-100, -100)
      startVal [frame N] = 0.0
      text = 3
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    TextComponent four
      font = Avenir next
      letterHeight = 20
      pos = (0, -100)
      startVal [frame N] = 0.0
      text = 4
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    TextComponent five
      font = Avenir Next
      letterHeight = 20
      pos = (100, -100)
      startVal [frame N] = 0.0
      text = 5
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    TextComponent six
      font = Avenir Next
      letterHeight = 20
      pos = (200, -100)
      startVal [frame N] = 0.0
      text = 6
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    TextComponent seven
      font = Avenir Next
      letterHeight = 20
      pos = (300, -100)
      startVal [frame N] = 0.0
      text = 7
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    TextComponent liberal
      font = Avenir Next
      letterHeight = 20
      pos = (300, -50)
      startVal [frame N] = 0.0
      text = Extremely liberal
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    TextComponent conservative
      font = Avenir Next
      letterHeight = 20
      pos = (-300, -50)
      startVal [frame N] = 0.0
      text = Extremely conservative
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    TextComponent moderate
      font = Avenir Next
      letterHeight = 20
      pos = (0, -50)
      startVal [frame N] = 0.0
      text = Moderate
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  Routine individual_diff_intro
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    TextComponent individual_diffs_instructions
      font = Avenir Next
      letterHeight = 20
      startVal [frame N] = 0.0
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      text:
        Thank you for your responses!

        We now have a number of questions to ask you about how you perceive the world around you.

        These questions will ask you to rate how much you agree or disagree with a given statement. Please read each statement carefully and respond as truthfully as possible. For each item, press the corresponding numeric value on the NUMERIC KEYPAD to enter your response. Once you press an answer key, your response will be immediately recorded so please be thoughtful about your answers.

        There are no right or wrong answers. Press the SPACE BAR to begin.
    KeyboardComponent begin_individual_diffs
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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  Routine police_fight_flight_set
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    TextComponent pff_questions
      font = Avenir Next
      letterHeight = 20
      pos = (0, 250)
      startVal [frame N] = 0.0
      text [set every repeat] = $question
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    TextComponent one_pff
      font = Avenir Next
      letterHeight = 20
      pos = (-300, -100)
      startVal [frame N] = 0.0
      text = 1
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    TextComponent two_pff
      font = Avenir Next
      letterHeight = 20
      pos = (-225, -100)
      startVal [frame N] = 0.0
      text = 2
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    TextComponent three_pff
      font = Avenir Next
      letterHeight = 20
      pos = (-150, -100)
      startVal [frame N] = 0.0
      text = 3
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    TextComponent four_pff
      font = Avenir Next
      letterHeight = 20
      pos = (-75, -100)
      startVal [frame N] = 0.0
      text = 4
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    TextComponent five_pff
      font = Avenir Next
      letterHeight = 20
      pos = (0, -100)
      startVal [frame N] = 0.0
      text = 5
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    TextComponent six_pff
      font = Avenir Next
      letterHeight = 20
      pos = (75, -100)
      startVal [frame N] = 0.0
      text = 6
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    TextComponent seven_pff
      font = Avenir Next
      letterHeight = 20
      pos = (150, -100)
      startVal [frame N] = 0.0
      text = 7
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    TextComponent eight_pff
      font = Avenir Next
      letterHeight = 20
      pos = (225, -100)
      startVal [frame N] = 0.0
      text = 8
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    TextComponent nine_pff
      font = Avenir Next
      letterHeight = 20
      pos = (300, -100)
      startVal [frame N] = 0.0
      text = 9
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    KeyboardComponent pff_response
      allowedKeys [set every repeat] = '1', '2', '3', '4', '5', '6', '7', '8', '9'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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    TextComponent min_pff
      font = Avenir Next
      letterHeight = 20
      pos = (-300, -50)
      startVal [frame N] = 0.0
      text [set every repeat] = $minimum
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    TextComponent max_pff
      font = Avenir Next
      letterHeight = 20
      pos = (300, -50)
      startVal [frame N] = 0.0
      text [set every repeat] = $maximum
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  Routine police_avoidance_set
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    TextComponent pa_questions
      font = Avenir Next
      letterHeight = 20
      pos = (0, 150)
      startVal [frame N] = 0.0
      text [set every repeat] = $question
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    TextComponent zero_pa
      font = Avenir Next
      letterHeight = 20
      pos = (-150, -50)
      startVal [frame N] = 0.0
      text = 0
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    TextComponent one_pa
      font = Avenir Next
      letterHeight = 20
      pos = (-50, -50)
      startVal [frame N] = 0.0
      text = 1
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    TextComponent two_pa
      font = Avenir Next
      letterHeight = 20
      pos = (50, -50)
      startVal [frame N] = 0.0
      text = 2
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    TextComponent three_pa
      font = Avenir Next
      letterHeight = 20
      pos = (150, -50)
      startVal [frame N] = 0.0
      text = 3
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    KeyboardComponent pa_response
      allowedKeys = '0', '1', '2', '3'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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    TextComponent min_pa
      font = Avenir Next
      letterHeight = 20
      pos = (-150, 0)
      startVal [frame N] = 0.0
      text [set every repeat] = $minimum
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    TextComponent max_pa
      font = Avenir Next
      letterHeight = 20
      pos = (150, 0)
      startVal [frame N] = 0.0
      text [set every repeat] = $maximum
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  Routine gblems_set
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    TextComponent gblems_questions
      font = Avenir Next
      letterHeight = 20
      pos = (0, 150)
      startVal [frame N] = 0.0
      text [set every repeat] = $question
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    TextComponent one_gblems
      font = Avenir Next
      letterHeight = 20
      pos = (-200, -50)
      startVal [frame N] = 0.0
      text = 1
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    TextComponent two_gblems
      font = Avenir Next
      letterHeight = 20
      pos = (-100, -50)
      startVal [frame N] = 0.0
      text = 2
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    TextComponent three_gblems
      font = Avenir Next
      letterHeight = 20
      pos = (0, -50)
      startVal [frame N] = 0.0
      text = 3
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    TextComponent four_gblems
      font = Avenir Next
      letterHeight = 20
      pos = (100, -50)
      startVal [frame N] = 0.0
      text = 4
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    TextComponent five_gblems
      font = Avenir Next
      letterHeight = 20
      pos = (200, -50)
      startVal [frame N] = 0.0
      text = 5
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    KeyboardComponent gblems_response
      allowedKeys = '1', '2', '3', '4', '5'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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    TextComponent min_gblems
      font = Avenir Next
      letterHeight = 20
      pos = (-200, 0)
      startVal [frame N] = 0.0
      text [set every repeat] = $minimum
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    TextComponent max_gblems
      font = Avenir Next
      letterHeight = 20
      pos = (200, 0)
      startVal [frame N] = 0.0
      text [set every repeat] = $maximum
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  Routine gblems_sp_set
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  Routine gblems_lo_set
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  Routine group_mem_set
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    TextComponent group_mem_questions
      font = Avenir Next
      letterHeight = 20
      pos = (0, 150)
      startVal [frame N] = 0.0
      text [set every repeat] = $question
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    TextComponent one_gm
      font = Avenir Next
      letterHeight = 20
      pos = (-300, -50)
      startVal [frame N] = 0.0
      text = 1
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    TextComponent two_gm
      font = Avenir Next
      letterHeight = 20
      pos = (-200, -50)
      startVal [frame N] = 0.0
      text = 2
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    TextComponent three_gm
      font = Avenir Next
      letterHeight = 20
      pos = (-100, -50)
      startVal [frame N] = 0.0
      text = 3
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    TextComponent four_gm
      font = Avenir Next
      letterHeight = 20
      pos = (0, -50)
      startVal [frame N] = 0.0
      text = 4
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    TextComponent five_gm
      font = Avenir Next
      letterHeight = 20
      pos = (100, -50)
      startVal [frame N] = 0.0
      text = 5
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    TextComponent six_gm
      font = Avenir Next
      letterHeight = 20
      pos = (200, -50)
      startVal [frame N] = 0.0
      text = 6
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    TextComponent seven_gm
      font = Avenir Next
      letterHeight = 20
      pos = (300, -50)
      startVal [frame N] = 0.0
      text = 7
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    KeyboardComponent gm_response
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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    TextComponent min_gm
      font = Avenir Next
      letterHeight = 20
      pos = (-300, 0)
      startVal [frame N] = 0.0
      text [set every repeat] = $minimum
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    TextComponent mid_gm
      font = Avenir Next
      letterHeight = 20
      startVal [frame N] = 0.0
      text [set every repeat] = $midpoint
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    TextComponent max_gm
      font = Avenir Next
      letterHeight = 20
      pos = (300, 0)
      startVal [frame N] = 0.0
      text [set every repeat] = $maximum
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  Routine gblems_expanded_set
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    TextComponent gblems_e_questions
      font = Avenir Next
      letterHeight = 20
      pos = (0, 150)
      startVal [frame N] = 0.0
      text [set every repeat] = $question
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    TextComponent one_gblemse
      font = Avenir Next
      letterHeight = 20
      pos = (-300, -50)
      startVal [frame N] = 0.0
      text = 1
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    TextComponent two_gblemse
      font = Avenir Next
      letterHeight = 20
      pos = (-225, -50)
      startVal [frame N] = 0.0
      text = 2
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    TextComponent three_gblemse
      font = Avenir Next
      letterHeight = 20
      pos = (-150, -50)
      startVal [frame N] = 0.0
      text = 3
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    TextComponent four_gblemse
      font = Avenir Next
      letterHeight = 20
      pos = (-75, -50)
      startVal [frame N] = 0.0
      text = 4
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    TextComponent five_gblemse
      font = Avenir Next
      letterHeight = 20
      pos = (0, -50)
      startVal [frame N] = 0.0
      text = 5
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    TextComponent six_gblemse
      font = Avenir Next
      letterHeight = 20
      pos = (75, -50)
      startVal [frame N] = 0.0
      text = 6
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    TextComponent seven_gblemse
      font = Avenir Next
      letterHeight = 20
      pos = (150, -50)
      startVal [frame N] = 0.0
      text = 7
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    TextComponent eight_gblemse
      font = Avenir Next
      letterHeight = 20
      pos = (225, -50)
      startVal [frame N] = 0.0
      text = 8
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    TextComponent nine_gblemse
      font = Avenir Next
      letterHeight = 20
      pos = (300, -50)
      startVal [frame N] = 0.0
      text = 9
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    KeyboardComponent gblemse_response
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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    TextComponent min_gblemse
      font = Avenir Next
      letterHeight = 20
      pos = (-300, 0)
      startVal [frame N] = 0.0
      text [set every repeat] = $minimum
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    TextComponent max_gblemse
      font = Avenir Next
      letterHeight = 20
      pos = (300, 0)
      startVal [frame N] = 0.0
      text [set every repeat] = $maximum
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  Routine ill_intent_block
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    TextComponent ii_question
      font = Avenir Next
      letterHeight = 20
      pos = (0, 250)
      startVal [frame N] = 0.0
      text [set every repeat] = $question
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    TextComponent ii_one
      font = Avenir Next
      letterHeight = 20
      pos = (-300, -50)
      startVal [frame N] = 0.0
      text = 1
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    TextComponent ii_two
      font = Avenir Next
      letterHeight = 20
      pos = (-200, -50)
      startVal [frame N] = 0.0
      text = 2
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    TextComponent ii_three
      font = Avenir Next
      letterHeight = 20
      pos = (-100, -50)
      startVal [frame N] = 0.0
      text = 3
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    TextComponent ii_four
      font = Avenir Next
      letterHeight = 20
      pos = (0, -50)
      startVal [frame N] = 0.0
      text = 4
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    TextComponent ii_five
      font = Avenir Next
      letterHeight = 20
      pos = (100, -50)
      startVal [frame N] = 0.0
      text = 5
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    TextComponent ii_six
      font = Avenir Next
      letterHeight = 20
      pos = (200, -50)
      startVal [frame N] = 0.0
      text = 6
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    TextComponent ii_seven
      font = Avenir Next
      letterHeight = 20
      pos = (300, -50)
      startVal [frame N] = 0.0
      text = 7
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    KeyboardComponent ii_resp
      allowedKeys [set every repeat] = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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    TextComponent ii_min
      font = Avenir Next
      letterHeight = 20
      pos = (-300, 10)
      startVal [frame N] = 0.0
      text [set every repeat] = $minimum
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    TextComponent ii_max
      font = Avenir Next
      letterHeight = 20
      pos = (300, 10)
      startVal [frame N] = 0.0
      text [set every repeat] = $maximum
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  Routine ill_intent_prompt
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    TextComponent ii_prompt
      font = Avenir Next
      letterHeight = 20
      startVal [frame N] = 0.0
      stopVal [frame N] = 300
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      text:
        Thank you for your responses!

        We would now like to understand how you perceive the police offer's intent..
Flow
  LoopInitiator intro_loop loopType="TrialHandler"
    Selected rows = 1
    conditionsFile = conditions.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'intro': "Research shows that people hold mental representations of 'typical' members of social categories.\n\nWe are interested in your mental representation of how the 'typical' police officer views Black men.\n\nPress the SPACE BAR to continue!", 'overall_instr': "In this study, you will see two faces side-by-side. As per the instructions you will see at the top of the screen, you will be asked to indicate which of these faces looks MOST like how a 'typical' police officer views Black men.\n\nIf you believe the face on the left matches this perception, press the LEFT arrow key. Otherwise,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,
      {'intro': "Research shows that people hold mental representations of 'typical' members of social categories.\n\nWe are interested in your mental representation of how the 'typical' police officer views Black men.\n\nPress the SPACE BAR to continue!", 'overall_instr': "In this study, you will see two faces side-by-side. As per the instructions you will see at the top of the screen, you will be asked to indicate which of these faces looks MOST like how a 'typical' police officer views Black men.\n\nIf you believe the face on the left matches this perception, press the LEFT arrow key. Otherwise, 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,
      {'intro': "Research shows that people hold mental representations of 'typical' members of social categories.\n\nWe are interested in your mental representation of how the 'typical' police officer views Black men.\n\nPress the SPACE BAR to continue!", 'overall_instr': "In this study, you will see two faces side-by-side. As per the instructions you will see at the top of the screen, you will be asked to indicate which of these faces looks MOST like how a 'typical' police officer views Black men.\n\nIf you believe the face on the left matches this perception, press the LEFT arrow key. Otherwise, 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,
      {'intro': "Research shows that people hold mental representations of 'typical' members of social categories.\n\nWe are interested in your mental representation of how the 'typical' police officer views Black men.\n\nPress the SPACE BAR to continue!", 'overall_instr': "In this study, you will see two faces side-by-side. As per the instructions you will see at the top of the screen, you will be asked to indicate which of these faces looks MOST like how a 'typical' police officer views Black men.\n\nIf you believe the face on the left matches this perception, press the LEFT arrow key. Otherwise, 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
    Routine introduction
  LoopTerminator intro_loop
  LoopInitiator task_instruction_loop loopType="TrialHandler"
    Selected rows = 1
    conditionsFile = conditions.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
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    Routine task_instructions
  LoopTerminator task_instruction_loop
  LoopInitiator img_gen_trials_loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine img_generation
  LoopTerminator img_gen_trials_loop
  Routine ill_intent_prompt
  LoopInitiator ill_intent_loop loopType="TrialHandler"
    conditionsFile = ill_intent.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'domain': 'ill_intent', 'question': 'What is the likelihood that the police officer has ill/bad intentions towards you?', 'minimum': 'Extremely unlikely', 'maximum': 'Extremely likely'},
      {'domain': 'ill_intent', 'question': 'What is the likelihood that the police officer has ill/bad intentions towards your racial group?', 'minimum': 'Extremely unlikely', 'maximum': 'Extremely likely'}]
    Routine ill_intent_block
  LoopTerminator ill_intent_loop
  Routine individual_diff_intro
  LoopInitiator scales_loop loopType="TrialHandler"
    conditionsFile = blocks_conditions.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'block_name': 'police_fight_flight_set'},
      {'block_name': 'police_avoidance_set'},
      {'block_name': 'gblems_set'},
      {'block_name': 'gblems_expanded_set'},
      {'block_name': 'group_mem_set'}]
    LoopInitiator police_fight_flight_loop loopType="TrialHandler"
      conditionsFile = police_fight_flight.xlsx
      loopType = random
      nReps = Number(block_name == 'police_fight_flight_set')
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      conditions:
        [{'domain': 'fight_or_flight1', 'question': 'You’re walking home alone at night when someone says to stop walking. They are the typical police officer. They are armed. They begin to approach you. To your knowledge, you are doing nothing wrong and are breaking no laws. \nPlease indicate your agreement with the following question:\n\nTo what extent would you be preparing to physically defend yourself?', 'minimum': 'Not at all', 'maximum': 'Extremely'},
        {'domain': 'fight_or_flight2', 'question': 'You’re walking home alone at night when someone says to stop walking. They are the typical police officer. They are armed. They begin to approach you. To your knowledge, you are doing nothing wrong and are breaking no laws. \nPlease indicate your agreement with the following question:\n\nTo what extent would you be preparing to run away?', 'minimum': 'Not at all', 'maximum': 'Extremely'}]
      Routine police_fight_flight_set
    LoopTerminator police_fight_flight_loop
    LoopInitiator police_avoidance_loop loopType="TrialHandler"
      conditionsFile = police_avoidance.xlsx
      loopType = random
      nReps = Number(block_name == 'police_avoidance_set')
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      conditions:
        [{'domain': 'police_avoidance1', 'question': 'How often do you watch how you dress to avoid getting harassed by the police?', 'minimum': 'Never', 'maximum': 'Always'},
        {'domain': 'police_avoidance2', 'question': 'How often do you drive in a way to make sure that you do not attract attention from the police?', 'minimum': 'Never', 'maximum': 'Always'},
        {'domain': 'police_avoidance3', 'question': 'Plan drive/walk How often do you plan where to drive/ walk to make sure that you do not attract attention from the police?', 'minimum': 'Never', 'maximum': 'Always'},
        {'domain': 'police_avoidance4', 'question': 'How often do you watch how loudly you speak with others to avoid attention from the police?', 'minimum': 'Never', 'maximum': 'Always'},
        {'domain': 'police_avoidance5', 'question': 'How often do you feel pressure to remain calm to avoid attention from the police?', 'minimum': 'Never', 'maximum': 'Always'},
        {'domain': 'police_avoidance6', 'question': 'How often do you have contact with the police  in your daily life (e.g., seeing, speaking to, or interacting with them)?', 'minimum': 'Never', 'maximum': 'Very often'}]
      Routine police_avoidance_set
    LoopTerminator police_avoidance_loop
    LoopInitiator gblems_loop loopType="TrialHandler"
      conditionsFile = gblems_target.xlsx
      loopType = random
      nReps = Number(block_name == 'gblems_set')
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      conditions:
        [{'domain': 'gblems1', 'question': 'People of your racial group should be suspicious of information from police', 'minimum': 'Strongly disagree', 'maximum': 'Strongly agree'},
        {'domain': 'gblems2', 'question': 'People of your racial group cannot trust police', 'minimum': 'Strongly disagree', 'maximum': 'Strongly agree'},
        {'domain': 'gblems3', 'question': 'Police treat people of your racial group like ‘animals’', 'minimum': 'Strongly disagree', 'maximum': 'Strongly agree'},
        {'domain': 'gblems4', 'question': 'Police do not take the complaints of people of your racial group seriously', 'minimum': 'Strongly disagree', 'maximum': 'Strongly agree'},
        {'domain': 'gblems5', 'question': 'People of your racial group should not confide in police because it will be used against them', 'minimum': 'Strongly disagree', 'maximum': 'Strongly agree'},
        {'domain': 'gblems6', 'question': 'People of your racial group should be suspicious of the police”', 'minimum': 'Strongly disagree', 'maximum': 'Strongly agree'},
        {'domain': 'gblems7', 'question': 'Police sometimes hide information from people who belong to your racial group', 'minimum': 'Strongly disagree', 'maximum': 'Strongly agree'},
        {'domain': 'gblems8', 'question': 'Police have the best interests of people of your racial group in mind', 'minimum': 'Strongly disagree', 'maximum': 'Strongly agree'}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
      Routine gblems_set
    LoopTerminator gblems_loop
    LoopInitiator gblems_expanded_loop loopType="TrialHandler"
      conditionsFile = gblems_expanded.xlsx
      loopType = random
      nReps = Number(block_name == 'gblems_expanded_set')
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      conditions:
        [{'domain': 'perceived_intent', 'question': 'What is the likelihood that a police officer has ill/bad intentions towards your racial group?', 'minimum': 'Extremely unlikely', 'maximum': 'Extremely likely'},
        {'domain': 'law_order', 'question': 'To what degree do you think police officers view their role as being to create law and order in the community?', 'minimum': None, 'maximum': None},
        {'domain': 'serve_protect', 'question': 'To what degree do you think police officers view their role as being to serve and protect people in the community?', 'minimum': 'Not at all', 'maximum': 'Extremely'}]
      Routine gblems_expanded_set
    LoopTerminator gblems_expanded_loop
    LoopInitiator group_membership_loop loopType="TrialHandler"
      conditionsFile = group_membership.xlsx
      loopType = random
      nReps = Number(block_name == 'group_mem_set')
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      conditions:
        [{'domain': 'group_membership1', 'question': 'To what degree do you view the typical police officer as an ingroup member?', 'minimum': 'Completely outgroup', 'midpoint': 'Equally outgroup and ingroup', 'maximum': 'Completely ingroup'},
        {'domain': 'group_membership2', 'question': 'To what degree do you think the typical police officer views themselves as a part of your ingroup?', 'minimum': 'Completely outgroup', 'midpoint': 'Equally outgroup and ingroup', 'maximum': 'Completely ingroup'},
        {'domain': 'group_membership3', 'question': 'To what degree do you view the typical police officer as similar to you?', 'minimum': 'Not at all similar', 'midpoint': None, 'maximum': 'Extremely similar'},
        {'domain': 'group_membership4', 'question': 'To what degree do you view the typical Black police officer as an ingroup member?', 'minimum': 'Completely outgroup', 'midpoint': 'Equally outgroup and ingroup', 'maximum': 'Completely ingroup'},
        {'domain': 'group_membership5', 'question': 'To what degree do you think the typical Black police officer views themselves as a part of your ingroup?', 'minimum': 'Completely outgroup', 'midpoint': 'Equally outgroup and ingroup', 'maximum': 'Completely ingroup'},
        {'domain': 'group_membership6', 'question': 'To what degree do you view the typical Black police officer as similar to you?', 'minimum': 'Not at all similar', 'midpoint': None, 'maximum': 'Extremely similar'}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
      Routine group_mem_set
    LoopTerminator group_membership_loop
  LoopTerminator scales_loop
  Routine demo_intro
  Routine age
  Routine born_us
  Routine english_fluent
  Routine sex
  Routine race
  Routine politics
  Routine politics_scale
  Routine thanks
